PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = run_experiment_2021
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent Stimuli
      color [set every repeat] = $stimulus_color
      letterHeight [set every repeat] = stimulus_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $stimulus_duration
      text [set every repeat] = $stimuli
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  Routine instructions
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  Routine trigger
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    TextComponent wait_for_trigger
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Wait for trigger
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    KeyboardComponent ttl_key_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine trigger
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = experiment.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stimuli', 'png'), ('trial_type', 'cue'), ('stimulus_onset', 0.0), ('block_type', '0-back'), ('stimulus_size', 0.15), ('stimulus_color', 'red'), ('stimulus_duration', 2.0), ('cor_res', None)]),
      OrderedDict([('stimuli', 'X'), ('trial_type', 'target'), ('stimulus_onset', 2.0), ('block_type', '0-back'), ('stimulus_size', 0.15), ('stimulus_color', 'white'), ('stimulus_duration', 2.8), ('cor_res', 'left')]),
      OrderedDict([('stimuli', '+'), ('trial_type', 'fixation'), ('stimulus_onset', 4.8), ('block_type', '0-back'), ('stimulus_size', 0.05), ('stimulus_color', 'white'), ('stimulus_duration', 0.2), ('cor_res', None)]),
      OrderedDict([('stimuli', 'U'), ('trial_type', 'non-target'), ('stimulus_onset', 5.0), ('block_type', '0-back'), ('stimulus_size', 0.15), ('stimulus_color', 'white'), ('stimulus_duration', 2.8), ('cor_res', 'right')]),
      OrderedDict([('stimuli', '+'), ('trial_type', 'fixation'), ('stimulus_onset', 7.8), ('block_type', '0-back'), ('stimulus_size', 0.05), ('stimulus_color', 'white'), ('stimulus_duration', 0.2), ('cor_res', None)]),
      OrderedDict([('stimuli', 'U'), ('trial_type', 'non-target'), ('stimulus_onset', 8.0), ('block_type', '0-back'), ('stimulus_size', 0.15), ('stimulus_color', 'white'), ('stimulus_duration', 2.8), ('cor_res', 'right')]),
      OrderedDict([('stimuli', '+'), ('trial_type', 'fixation'), ('stimulus_onset', 10.8), ('block_type', '0-back'), ('stimulus_size', 0.05), ('stimulus_color', 'white'), ('stimulus_duration', 0.2), ('cor_res', None)])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
    Routine trial
  LoopTerminator experiment
